<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.LoadCells;assembly=Harp.LoadCells"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateDO5TargetLoadCellPayload">
          <p1:DO5TargetLoadCell>Channel4</p1:DO5TargetLoadCell>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>LoadCells Commands</Name>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateDO5ThresholdPayload">
          <p1:DO5Threshold>1000</p1:DO5Threshold>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>LoadCells Commands</Name>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateDO5TimeAboveThresholdPayload">
          <p1:DO5TimeAboveThreshold>50</p1:DO5TimeAboveThreshold>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>LoadCells Commands</Name>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateDO5TimeBelowThresholdPayload">
          <p1:DO5TimeBelowThreshold>50</p1:DO5TimeBelowThreshold>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>LoadCells Commands</Name>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateAcquisitionStatePayload">
          <p1:AcquisitionState>Enabled</p1:AcquisitionState>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>LoadCells Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateDO5TargetLoadCellPayload">
          <p1:DO5TargetLoadCell>None</p1:DO5TargetLoadCell>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>LoadCells Commands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
